PsychoPy2experiment version="1.85.2"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = hapticsChat
  Screen = 1
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Routines
  Routine trial
    TextComponent text
      startVal [time (s)] = 0.0
      font = ヒラギノ角ゴシック W5
      letterHeight = 0.1
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      text:
        風が心地よく天気の穏やかな、すっきりと
        目覚めた休日に来週末に行く予定の旅行に
        ついて、友人たちと計画を立てていた。
    SoundComponent sound_1
      sound = 250
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine trial_noSound
    TextComponent text
      startVal [time (s)] = 0.0
      font = ヒラギノ角ゴシック W5
      letterHeight = 0.1
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      text:
        風が心地よく天気の穏やかな、すっきりと
        目覚めた休日に来週末に行く予定の旅行に
        ついて、友人たちと計画を立てていた。
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine second
    TextComponent text_2
      startVal [time (s)] = 0.0
      font = ヒラギノ角ゴシック W5
      letterHeight = 0.1
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      text:
        月曜に控えたテストとレポート提出の準備が不十分
        なのに、土曜の夜に予定よりも早く寝てしまった。
    SoundComponent sound_2
      sound = 120
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine second_noSound
    TextComponent text_2
      startVal [time (s)] = 0.0
      font = ヒラギノ角ゴシック W5
      letterHeight = 0.1
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      text:
        月曜に控えたテストとレポート提出の準備が不十分
        なのに、土曜の夜に予定よりも早く寝てしまった。
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine survey
    RatingScaleComponent rating
      labels = Positive, Negative
      pos = 0, -0.4
      high = 7
      startVal [time (s)] = 0.0
      size = 1.0
      forceEndRoutine = True
      low = 1
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  Routine fourth
    TextComponent text_4
      startVal [time (s)] = 0.0
      font = ヒラギノ角ゴシック W5
      letterHeight = 0.1
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      text:
        久しぶりにゆっくりできる休日を布団の中で
        ごろごろしながらTVを見たりして満喫した。
    SoundComponent sound_4
      sound = 250
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine fourth_noSound
    TextComponent text_4
      startVal [time (s)] = 0.0
      font = ヒラギノ角ゴシック W5
      letterHeight = 0.1
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      text:
        久しぶりにゆっくりできる休日を布団の中で
        ごろごろしながらTVを見たりして満喫した。
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine third
    TextComponent text_3
      startVal [time (s)] = 0.0
      font = ヒラギノ角ゴシック W5
      letterHeight = 0.1
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      text:
        昨晩の夜更かしにも関わらず頑張って起きて出席
        した1限の授業が、友人もいないし先生の話も退屈
        であった。
    SoundComponent sound_3
      sound = 120
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine third_noSound
    TextComponent text_3
      startVal [time (s)] = 0.0
      font = ヒラギノ角ゴシック W5
      letterHeight = 0.1
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      text:
        昨晩の夜更かしにも関わらず頑張って起きて出席
        した1限の授業が、友人もいないし先生の話も退屈
        であった。
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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Flow
  Routine third_noSound
  Routine survey
  Routine second_noSound
  Routine survey
  Routine trial_noSound
  Routine survey
  Routine fourth_noSound
  Routine survey
  Routine trial
  Routine survey
  Routine second
  Routine survey
  Routine third
  Routine survey
  Routine fourth
  Routine survey
